PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = Hippopolis_4AFCT
  keyboardBackend = ioHub
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Routines
  Routine fixation_cross
    TextComponent fx_cross
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine city_name
    TextComponent cityname_text
      color = black
      letterHeight = 48
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    ImageComponent city_image
      image [set every repeat] = $CityImage
      pos = (0, -100)
      size = (750, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent count_responses
      Code Type = Auto->JS
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      Begin Experiment:
        target = 0
        lure = 0
        dist1 = 0
        dist2 = 0

        repetitions = 0
      Begin Routine:
        target = 0
        lure = 0
        dist1 = 0
        dist2 = 0

        trial_count = 0
        repetitions += 1
  Routine take_a_break
    TextComponent break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Szünet....
        A szünet után a másik város következik.

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_responses
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('n_targets', target)
        thisExp.addData('n_lures', lure)
        thisExp.addData('n_dist1s', dist1)
        thisExp.addData('n_dist2s', dist2)
    CodeComponent skip_if_task_ends
      Code Type = Auto->JS
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      Begin Routine:
        if repetitions >= 2:
            continueRoutine = False
  Routine prediction_phase
    ImageComponent plate
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent city_text
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $CityName
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    TextComponent street_text
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Cue
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    TextComponent fx_cross_prediction
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +
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  Routine test_trial
    ImageComponent plate_updating
      image [set every repeat] = $StreetSign
      pos = (0, 350)
      size = (513, 215)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent city_text_updating
      color = black
      letterHeight = 36
      pos = (0, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $CityName
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    TextComponent street_text_updating
      color = black
      letterHeight = 48
      pos = (0, 320)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $Cue
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    ImageComponent test_image1
      image [set every repeat] = $TestImage1
      pos = (-512, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent test_image2
      image [set every repeat] = $TestImage2
      pos = (-192, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent test_image3
      image [set every repeat] = $TestImage3
      pos = (192, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent test_image4
      image [set every repeat] = $TestImage4
      pos = (512, 0)
      size = (256, 256)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_d
      image = stimuli\test_4afc_d.png
      pos = (-512, -350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_f
      image = stimuli\test_4afc_f.png
      pos = (-192,-350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_j
      image = stimuli\test_4afc_j.png
      pos = (192, -350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent button_k
      image = stimuli\test_4afc_k.png
      pos = (512, -350)
      size = (99, 94)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent check_response
      Code Type = Auto->JS
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      End Routine:
        key = key_resp.keys
        response = 'invalid'

        if key == 'd':
            response = TestImage1Type
        elif key == 'f':
            response = TestImage2Type
        elif key == 'j':
            response = TestImage3Type
        elif key == 'k':
            response = TestImage4Type

        print(response)
        thisExp.addData('test_resp', response)
        if response == 'target':
            target += 1
        if response == 'lure':
            lure += 1
        if response == 'dist1':
            dist1 += 1
        if response == 'dist2':
            dist2 += 1
    ImageComponent clock0
      image = stimuli\stopwatch0.png
      pos = (450, 350)
      size = (150, 150)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.5
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  Routine setup
    CodeComponent selct_file
      Code Type = Auto->JS
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      Begin Experiment:
        ID = expInfo['participant']
        city_list = './stimuli/subj_files/' + ID + '_city_list.csv'
    CodeComponent block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        repetitions = 0
  Routine end_task
    TextComponent end_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      wrapWidth = 1000
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      text:
        Vége a vizsgálatnak!

        Köszönjük a részvételt!
  Routine short_break
    TextComponent short_break_text
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
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      text:
        Rövid szünet.... Ugyanezzel a várossal folytatjuk.

        A folytatáshoz nyomja le a SZÓKÖZ billentyűt.
    KeyboardComponent short_break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent need_a_break
      Code Type = Auto->JS
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      Begin Routine:
        trial_count += 1

        if trial_count < 45:
            continueRoutine = False
        else:
            trial_count = 0
  Routine test_instructions
    TextComponent learning_instructions_text
      color = black
      letterHeight = 35
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        A következőkben 4 kép közül kell kiválasztania, melyiket látta legutóbb a megadott utcában.

        Az utcanevet a képernyő tetején tüntetjük fel, ez alatt jelennek meg a választható képek.
        A 'D', 'F', 'J' és 'K' billentyűk segítségével válasszon a képek közül.

        A SZÓKÖZ lenyomásával elindul a feladat.
    KeyboardComponent intro_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine test_instructions
  LoopInitiator CityBlock loopType="TrialHandler"
    conditionsFile = $city_list
    isTrials = False
    loopType = random
    nReps = 1
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    Routine city_name
    LoopInitiator LearningTrials loopType="TrialHandler"
      conditionsFile = $StimuliFile
      loopType = random
      nReps = 1
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      Routine fixation_cross
      Routine test_trial
      Routine short_break
    LoopTerminator LearningTrials
    Routine take_a_break
  LoopTerminator CityBlock
  Routine end_task
